CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['Add the plate images to view when testing parameters. If not, make sure it is blank prior to processing the images via the notebook.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['There is no need to extract metadata since we are not using the GUI to processes each plate.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:No
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
    Regular expression to extract from folder name:(?P<Plate>localhost220512140003_KK22-05-198|localhost220513100001_KK22-05-198_FactinAdjusted|localhost230405150001)
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['Assign each image to its channel.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[]
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:5
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:OrigDNA
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:OrigER
    Name to assign these objects:Nucleus
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:OrigPM
    Name to assign these objects:Cytoplasm
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "d3")
    Name to assign these images:OrigMito
    Name to assign these objects:Speckle
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "d4")
    Name to assign these images:OrigActin
    Name to assign these objects:Object1
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['Since we are not using the GUI to processes each plate, we do NOT need to group the images by plate.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:Plate

MeasureImageQuality:[module_num:5|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['To measure image quality, we will be using all of the metrics but leaving the parameters for blur and thresholds as the defaults.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
    Typical fraction of the image covered by objects:0.1
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

ExportToSpreadsheet:[module_num:6|svn_version:'Unknown'|variable_revision_number:13|show_window:False|notes:['Export all of the whole image quality metrics to a spreadsheet to load in and evaluate.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
    Select source of sample row name:Metadata
    Select the image to use as the identifier:None
    Select the metadata to use as the identifier:None
    Export all measurement types?:Yes
    Press button to select measurements:
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
    Filename prefix:Whole_Image_QC
    Overwrite existing files without warning?:No
    Data to export:Do not use
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:Yes
