CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Plate>[a-z]{9}[0-9]{12})_(?P<Well>[A-H]{1}[0-9]{2})(?P<Site>[f]{1}[0-9]{2})(?P<Channel>[d]{1}[0-4]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:Golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d3")
    Name to assign these images:Mitochondria
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d4")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Note: Blurry images seem to be segmenting very well -> almost better than sharper images', 'This is struggling with two nuclei close together even with the best parameters.', '', 'This module segments the nuclei from the Hoechst channel.']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['This module segments the whole cells (these parameters are the best for the dataset at the current moment).']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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notes:['This module will identify the cytoplasm object based on subtracting the nuclei from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:8|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notes:['This module measures colocalization for both the whole images and for each object.']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
    Select images to measure:Actin, ER, Golgi, Hoechst, Mitochondria
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:9|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notes:['Looks like based on the running this originally, this module will measure image granularity with the option to measure within objects also so only need one of these modules.']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
    Select images to measure:Actin, ER, Golgi, Hoechst, Mitochondria
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:10|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notes:['This module measures the intensity within each individual object']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
    Select images to measure:Actin, ER, Golgi, Hoechst, Mitochondria
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureImageIntensity:[module_num:11|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notes:['This is set to measure intensity for the whole image.']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
    Select images to measure:Actin, ER, Golgi, Hoechst, Mitochondria
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectNeighbors:[module_num:12|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notes:['This measures adjacent nuclei neighbors.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:13|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notes:['This measures adjacent cell neighbors (would be the same as cytoplasm so there is no module for that object).']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:14|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notes:['This module measures the intensity distribution within the objects using the center x,y coordinates for each object (not using the other options as it seems better to measure within the whole objects unlike what happens in the other options).']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
    Select images to measure:Actin, ER, Golgi, Hoechst, Mitochondria
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:15|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notes:['This measures the size and shape (among other measurements) for the objects.']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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:16|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notes:['This module will measure the texture within the objects and whole images.']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
    Select images to measure:Actin, ER, Golgi, Hoechst, Mitochondria
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureImageQuality:[module_num:17|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notes:['This module is only measuring the blur within all loaded images (every channel) as we have noticed issues with blur in this dataset.']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
ExportToDatabase:[module_num:18|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notes:['This module outputs an sqlite file with all of the image and object features. The name is set to CFReT.sqlite since it needs a name to run, but this is changed post-run for each plate to be named {plate}.sqlite.']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder sub-folder|CFReT_data/2.cellprofiler_processing/CellProfiler_output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:CFReT.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells,Cytoplasm,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:CFReT
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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